cut:
  cleaning_cross_section: false
  depth: 2.5e-05
  height: 5.0e-07
  milling_current: 2.0e-09
  rotation: 0
  scan_direction: TopToBottom
  width: 1.0e-05
fiducial:
  cleaning_cross_section: false
  depth: 5.0e-06
  height: 1.4999999999999999e-05
  milling_current: 7.6e-09
  rotation: 0.0
  scan_direction: TopToBottom
  width: 2.5e-07
flatten_landing:
  cleaning_cross_section: true
  depth: 1.0e-05
  height: 2.5e-05
  milling_current: 7.6e-09
  scan_direction: LeftToRight
  width: 2.0e-06
jcut:
  depth: 3.0e-06
  jcut_angle: 6.0
  lamella_height: 5.0e-06
  lhs_height: 1.2e-05
  milling_current: 2.0e-09
  rhs_height: 5.0e-06
  trench_thickness: 1.0e-06
  width: 1.2e-05
lamella:
  cleaning_cross_section: 0.0
  lamella_height: 10.0e-06
  lamella_width: 1.2e-05
  milling_current: 2.8e-08
  milling_depth: 1.0e-05
  offset: 2.0e-06
  protocol_stages:
  - cleaning_cross_section: 0.0
    lamella_height: 10.0e-06
    lamella_width: 1.2e-05
    milling_current: 2.8e-08
    milling_depth: 1.0e-05
    offset: 2.0e-06
    rotation: 0.0
    scan_direction: TopToBottom
    size_ratio: 5.0
    trench_height: 1.0e-05
  - cleaning_cross_section: 0.0
    lamella_height: 10.0e-06
    lamella_width: 1.2e-05
    milling_current: 7.6e-09
    milling_depth: 1.0e-05
    offset: 0.0
    rotation: 0.0
    scan_direction: TopToBottom
    size_ratio: 1.0
    trench_height: 3.0e-06
  rotation: 0.0
  scan_direction: TopToBottom
  size_ratio: 5.0
  trench_height: 1.0e-05
platinum:
  application_file: cryo_Pt_dep
  gas: Pt cryo
  position: cryo
  weld:
    hfw: 0.0001
    length: 1.5e-05
    time: 60
  whole_grid:
    hfw: 3.0e-05
    length: 7.0e-06
    time: 20
polish_lamella:
  dwell_time: 2.0e-07
  hfw: 5.0e-05
  lamella_height: 4.5e-07
  lamella_width: 6.0e-06
  milling_current: 2.0e-11
  milling_depth: 4.0e-07
  offset: 0.0
  resolution: 3072x2048
  rotation_angle: 50
  size_ratio: 1.0
  tilt_angle: 12
  tilt_offset: 1
  trench_height: 2.0e-07
reduced_area:
  dx: 1
  dy: 1
  x: 0
  y: 0
sever:
  cleaning_cross_section: true
  depth: 3.0e-06
  height: 5.0e-06
  rotation: 0.0
  scan_direction: LeftToRight
  width: 1.0e-06
sharpen:
  bias: 2.5e-07
  depth: 8.0e-06
  height: 2.5e-06
  hfw: 0.00015
  milling_current: 7.6e-09
  needle_angle: 40
  tip_angle: 25
  width: 2.0e-05
thin_lamella:
  dwell_time: 2.0e-07
  hfw: 5.0e-05
  lamella_height: 1.0e-06
  lamella_width: 6.0e-06
  milling_current: 2.0e-10
  milling_depth: 4.0e-07
  offset: 1.0e-06
  protocol_stages:
  - offset: 1.0e-06
    trench_height: 1.5e-06
  - lamella_height: 1.0e-06
    offset: 5.0e-07
    trench_height: 1.0e-06
  resolution: 3072x2048
  rotation_angle: 50
  size_ratio: 1.0
  tilt_angle: 12
  trench_height: 2.0e-06
weld:
  cleaning_cross_section: false
  depth: 2.0e-07
  height: 5.0e-06
  milling_current: 2.0e-09
  rotation: 0.0
  scan_direction: TopToBottom
  width: 3.0e-06
initial_position:
  sample_grid: # need to check the coordinate systems
    x: -3.2375e-3
    y: 3.9354e-3
    z: 30.95e-3
    coordinate_system: "Raw"
  landing_grid:
    # x is +6 mm from sample grid center
    x: 2.76265e-3 # x: 2.76265e-3
    # y is the same as sample grid center
    y: 3.9354e-3 # y: 3.9354e-3
    # z is the same as sample grid center
    z: 31.379e-3 # z: 31.379e-3
    coordinate_system: "Raw"